// Load Fiji dependencies
import ij.IJ; 		// calls imagej
import ij.Prefs; 	// calls imagej settings
import ij.ImagePlus;
import java.lang.Runtime;
import java.io.File;
import java.io.FilenameFilter;
 
runtime = Runtime.getRuntime();
System.out.println(runtime.availableProcessors() + " cores available for multi-threading");

Prefs.setThreads(1); 	// defines the number of threads allowed 
print("Threads: "+Prefs.getThreads()); // prints thread setting in output

// Load xml file
System.out.println("---------------------------------------------------------");
System.out.println("Xml file:");

xml_path = System.getProperty( "image_file_directory" );
merged_xml = System.getProperty( "merged_xml" );
if ( ! merged_xml.endsWith(".xml") )
    merged_xml = merged.xml + ".xml";

System.out.println( "selected_xml = " + xml_path + merged_xml + ".xml");

// General Registration Parameters and Channel Settings
System.out.println("---------------------------------------------------------");
System.out.println( "General parameters: " );
timelapse_process_timepoints = System.getProperty( "timelapse_process_timepoints" );
process_channel_timelapse = System.getProperty( "process_channel_timelapse" );
process_illumination = System.getProperty( "process_illumination" );
process_angle = System.getProperty( "process_angle" ); 
channel_1 = System.getProperty( "channel_1" );
channel_2 = System.getProperty( "channel_2" );

System.out.println( "process_timepoints = " + timelapse_process_timepoints ); 
System.out.println( "process_channel = " + process_channel_timelapse );
System.out.println( "process_illumination = " + process_illumination );
System.out.println( "process_angle = " + process_angle );
System.out.println( "channel_1 = " + channel_1 );
System.out.println( "channel_2 = " + channel_2 );
	
// Timelapse registration Parameter
System.out.println("---------------------------------------------------------");
System.out.println( "Timelapse Registration: " );

reference_timepoint = System.getProperty( "reference_timepoint" );
System.out.println( "reference_timepoint=" + reference_timepoint );

type_of_registration_timelapse = System.getProperty( "type_of_registration_timelapse" );
registration_algorithm = System.getProperty( "registration_algorithm" );
reg_1_interest_points_channel = System.getProperty( "reg_1_interest_points_channel" );
reg_2_interest_points_channel = System.getProperty( "reg_2_interest_points_channel" ); // Dual Channel 

System.out.println( "type_of_registration = " + type_of_registration_timelapse );
System.out.println( "registration_algorithm = " + registration_algorithm );
System.out.println( "interest_points_channel_" + channel_1 + " = " + reg_1_interest_points_channel );
System.out.println( "interest_points_channel_" + channel_2 + " = " + reg_2_interest_points_channel );

transformation_model = System.getProperty( "transformation_model" );
model_to_regularize_with = System.getProperty( "model_to_regularize_with" );
float lambda = Float.parseFloat( System.getProperty( "lambda" ) );
int allowed_error_for_ransac = Integer.parseInt( System.getProperty( "allowed_error_for_ransac" ) );
significance = System.getProperty( "significance" );

System.out.println( "transformation = " + transformation );
System.out.println( "model_to_regularize_with = " + model_to_regularize_with );
System.out.println( "lambda = " + lambda );
System.out.println( "allowed_error_for_ransac = " + allowed_error_for_ransac );
System.out.println( "significance = " + significance );

System.out.println( "=======================================================" );
System.out.println( "Starting Timelapse Registration" );

try {
IJ.run("Register Dataset based on Interest Points", 
	"select_xml=" + xml_path + merged_xml + " " + 
	"process_angle=[" + process_angle + "] " + 
	"process_channel=[" + process_channel_timelapse + "] " +
	"process_illumination=[" + process_illumination + "] " +  
	"process_timepoint=[" + timelapse_process_timepoints + "] " +
	"registration_algorithm=[" + registration_algorithm + "] " + 
	"type_of_registration=[" + type_of_registration_timelapse + "] " +
	"interest_points_channel_" + channel_1 + "=" + reg_1_interest_points_channel + " " +
//	"interest_points_channel_" + channel_2 + "=" + reg_2_interest_points_channel + " " + // Dual Channel 
	"reference=" + reference_timepoint + " " +
	"consider_each_timepoint_as_rigid_unit " +
	"transformation=" + transformation_model + " " +
	"regularize_model " +
	"model_to_regularize_with=" + model_to_regularize_with + " " +
	"lamba=" + lambda + " " +
	"allowed_error_for_ransac=" + allowed_error_for_ransac + " " +
	"significance=" + significance + "");
}
catch ( e ) { 

    print( "[deconvolution-GPU] caught exception: "+e );
    //important to fail the process if exception occurs
    runtime.exit(1);
    
}

/* shutdown */
runtime.exit(0);
